PsychoPy2experiment version="2020.1.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant': ''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = pix
  Window size (pixels) = [1536, 864]
  color = $[-1.000,1.000,1.000]
  expName = childANT
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Routines
  Routine instr_2
    ImageComponent image_2
      image = Stimuli/inst_2.png
      saveStartStop = False
      size = (1150, 950)
      startVal [time (s)] = 0.0
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    KeyboardComponent is_space2
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine instr_1
    ImageComponent image
      image = Stimuli/inst_1.png
      saveStartStop = False
      size = (1150,950)
      startVal [time (s)] = 0.0
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    KeyboardComponent is_space
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Experiment:
        import random
  Routine instr_3
    ImageComponent image_3
      image = Stimuli/inst_3.png
      saveStartStop = False
      size = (1150, 950)
      startVal [time (s)] = 0.0
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    KeyboardComponent is_space3
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine instr_4
    ImageComponent image_4
      image = Stimuli/inst_4.png
      saveStartStop = False
      size = (1150, 950)
      startVal [time (s)] = 0.0
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    KeyboardComponent is_space4
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine instr_5
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  Routine instr_6
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  Routine fixation
    PolygonComponent fix_cross
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[-1.000,-1.000,-1.000]
      saveStartStop = False
      shape = cross
      size = (40, 40)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = random.uniform(0.4,1.6)
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  Routine cue
    PolygonComponent fix_cross2
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[-1.000,-1.000,-1.000]
      saveStartStop = False
      shape = cross
      size = (40, 40)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.15
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    ImageComponent asterisk
      image = Stimuli/asterisk.png
      pos [set every repeat] = $(Cue_X, Cue_Y)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.15
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    ImageComponent asterisk2
      image = Stimuli/asterisk.png
      pos [set every repeat] = $(Cue2_X, Cue2_Y)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.15
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  Routine fixation_2
    PolygonComponent fix_cross3
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[-1.000,-1.000,-1.000]
      saveStartStop = False
      shape = cross
      size = (40, 40)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.45
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  Routine target
    PolygonComponent fix_cross4
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[-1.000,-1.000,-1.000]
      saveStartStop = False
      shape = cross
      size = (40, 40)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.7
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    ImageComponent target_stimulus
      image [set every repeat] = $Stimulus
      pos [set every repeat] = $(Stimulus_X, Stimulus_Y)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.7
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    KeyboardComponent response
      allowedKeys [set every repeat] = 'right','left'
      correctAns = $correctAns
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.7
      storeCorrect = True
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  Routine response_feedback
    CodeComponent code
      Code Type = Auto->JS
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      Begin Routine:
        if response.corr==1:
            feedback_img= feedback
            sound='Sounds/correct.wav'
        else:
            feedback_img=Stimulus
            sound='Sounds/incorrect.wav'
    ImageComponent feedback_image
      image [set every repeat] = $feedback_img
      pos [set every repeat] = $(Stimulus_X, Stimulus_Y)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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    SoundComponent sounds
      saveStartStop = False
      sound [set every repeat] = $sound
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      syncScreenRefresh = False
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  Routine Game_start
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  Routine trial_break
    CodeComponent code_3
      Code Type = Auto->JS
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      Begin Routine:
        if Main_loop.thisN not in [36, 72, 108]:
            continueRoutine=False
    TextComponent text
      color = Black
      font = Times New Roman
      letterHeight = 40
      startVal [time (s)] = 0.0
      wrapWidth = 1250
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      text:
        Take a short break.

        Once ready, press the <SPACEBAR> to proceed.
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine end
    TextComponent text_2
      color = Black
      font = Times New Roman
      letterHeight = 40
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
      wrapWidth = 1500
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      text:
        Το πεινασμένο ψάρι χόρτασε, άρα η αποστολή σου ολοκληρώθηκε.

        Ευχαριστούμε για τη συμμετοχή σου!
Flow
  Routine instr_1
  Routine instr_2
  Routine instr_3
  Routine instr_4
  Routine instr_5
  Routine instr_6
  LoopInitiator Practise_loop loopType="TrialHandler"
    conditionsFile = Practise.csv
    loopType = fullRandom
    nReps = 1
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    conditions:
      [OrderedDict([('Cue', 'central'), ('Target_side', 'neutral'), ('Stimulus', 'Stimuli/neutral_right.png'), ('Stimulus_X', 0), ('Stimulus_Y', 100), ('Cue_X', 0), ('Cue_Y', 0), ('correctAns', 'right'), ('feedback', 'Stimuli/feedback_neutral_right.png')]),
      OrderedDict([('Cue', 'central'), ('Target_side', 'neutral'), ('Stimulus', 'Stimuli/neutral_right.png'), ('Stimulus_X', 0), ('Stimulus_Y', 100), ('Cue_X', 0), ('Cue_Y', 0), ('correctAns', 'right'), ('feedback', 'Stimuli/feedback_neutral_right.png')]),
      OrderedDict([('Cue', 'central'), ('Target_side', 'neutral'), ('Stimulus', 'Stimuli/neutral_right.png'), ('Stimulus_X', 0), ('Stimulus_Y', 100), ('Cue_X', 0), ('Cue_Y', 0), ('correctAns', 'right'), ('feedback', 'Stimuli/feedback_neutral_right.png')]),
      OrderedDict([('Cue', 'central'), ('Target_side', 'congruent'), ('Stimulus', 'Stimuli/congruent_left.png'), ('Stimulus_X', 0), ('Stimulus_Y', -100), ('Cue_X', 0), ('Cue_Y', 0), ('correctAns', 'left'), ('feedback', 'Stimuli/feedback_con_left.png')]),
      OrderedDict([('Cue', 'central'), ('Target_side', 'congruent'), ('Stimulus', 'Stimuli/congruent_left.png'), ('Stimulus_X', 0), ('Stimulus_Y', -100), ('Cue_X', 0), ('Cue_Y', 0), ('correctAns', 'left'), ('feedback', 'Stimuli/feedback_con_left.png')]),
      OrderedDict([('Cue', 'central'), ('Target_side', 'congruent'), ('Stimulus', 'Stimuli/congruent_left.png'), ('Stimulus_X', 0), ('Stimulus_Y', -100), ('Cue_X', 0), ('Cue_Y', 0), ('correctAns', 'left'), ('feedback', 'Stimuli/feedback_con_left.png')])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
    Routine fixation
    Routine cue
    Routine fixation_2
    Routine target
    Routine response_feedback
  LoopTerminator Practise_loop
  Routine Game_start
  LoopInitiator Main_loop loopType="TrialHandler"
    conditionsFile = Conditions.csv
    loopType = fullRandom
    nReps = 1
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    conditions:
      [OrderedDict([('Cue', 'central'), ('Target_side', 'neutral'), ('Stimulus', 'Stimuli/neutral_right.png'), ('Stimulus_X', 0), ('Stimulus_Y', 100), ('Cue_X', 0), ('Cue_Y', 0), ('correctAns', 'right'), ('feedback', 'Stimuli/feedback_neutral_right.png')]),
      OrderedDict([('Cue', 'central'), ('Target_side', 'neutral'), ('Stimulus', 'Stimuli/neutral_right.png'), ('Stimulus_X', 0), ('Stimulus_Y', 100), ('Cue_X', 0), ('Cue_Y', 0), ('correctAns', 'right'), ('feedback', 'Stimuli/feedback_neutral_right.png')]),
      OrderedDict([('Cue', 'central'), ('Target_side', 'neutral'), ('Stimulus', 'Stimuli/neutral_right.png'), ('Stimulus_X', 0), ('Stimulus_Y', 100), ('Cue_X', 0), ('Cue_Y', 0), ('correctAns', 'right'), ('feedback', 'Stimuli/feedback_neutral_right.png')]),
      OrderedDict([('Cue', 'central'), ('Target_side', 'neutral'), ('Stimulus', 'Stimuli/neutral_right.png'), ('Stimulus_X', 0), ('Stimulus_Y', 100), ('Cue_X', 0), ('Cue_Y', 0), ('correctAns', 'right'), ('feedback', 'Stimuli/feedback_neutral_right.png')]),
      OrderedDict([('Cue', 'central'), ('Target_side', 'neutral'), ('Stimulus', 'Stimuli/neutral_right.png'), ('Stimulus_X', 0), ('Stimulus_Y', -100), ('Cue_X', 0), ('Cue_Y', 0), ('correctAns', 'right'), ('feedback', 'Stimuli/feedback_neutral_right.png')]),
      OrderedDict([('Cue', 'central'), ('Target_side', 'neutral'), ('Stimulus', 'Stimuli/neutral_right.png'), ('Stimulus_X', 0), ('Stimulus_Y', -100), ('Cue_X', 0), ('Cue_Y', 0), ('correctAns', 'right'), ('feedback', 'Stimuli/feedback_neutral_right.png')])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
    Routine fixation
    Routine cue
    Routine fixation_2
    Routine target
    Routine response_feedback
    Routine trial_break
  LoopTerminator Main_loop
  Routine end
